PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'learning type': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = white
  expName = article1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine text_1
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    TextComponent text1
      color = -1.0000, -1.0000, -1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        هر بار از میان دو گزینه‌ی نمایش داده شده،
        با فشردن یکی از کلیدهای راست و چپ روی کیبورد،
         گزینه‌ی با بیشترین پاداش را انتخاب کنید.

        (مجموع پاداش‌های شما در این بخش،
        پاداش نهایی شما را تعیین خواهد کرد.)

        (هرگاه آماده بودید، کلید space را فشار دهید.)
    KeyboardComponent text1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_learning
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    PolygonComponent fixation1
      fillColor = black
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.08
      shape = cross
      size = (0.03, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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  Routine main_learning
    RoutineSettingsComponent main_learning
      color = 1.0000, 1.0000, 1.0000
      useWindowParams = True
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    CodeComponent learning_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment

        import random

        # Create a list of image pairs
        image_pairs = [
            ("1.jpg", "2.jpg"),
            ("3.jpg", "4.jpg"),
            ("2.jpg", "1.jpg"),
            ("4.jpg", "3.jpg")
        ]

        # Create a list of trials with each pair in both possible positions
        trials = []
        for pair in image_pairs:
            trials.append(pair)        # Original order
            #trials.append(pair[::-1])  # Reversed order

        # Multiply trials to ensure enough repetitions and shuffle
        trials *= 25  # Adjust the number of repetitions as needed
        random.shuffle(trials)
        #
        ### Initialize PsychoPy window
        ##win = visual.Window(size=(800, 600), units='pix', fullscr=False)
        #win = visual.Window(size=(800, 600), monitor="testMonitor")

        # Initialize current_trial
        current_trial = 0

        #
        #image_filenames = ["1.jpg", "2.jpg", "3.jpg", "4.jpg"]  # Add all your filenames here
        #
        ## Create an empty list to store ImageStim objects
        #image_stims = []
        #
        ## Create ImageStim objects for each filename
        #for filename in image_filenames:
        #    image_stim = visual.ImageStim(win, image=filename, pos=(0, 0))  # Adjust position if needed
        #    image_stims.append(image_stim)
        #
        #
      Begin Routine:
        ## Begin Routine
        #
        ## Get the current trial
        leftimage = trials[current_trial][0]
        rightimage = trials[current_trial][1]
        #
        ## Define positions
        #left_pos = (-200, 0)  # Example position for left image
        #right_pos = (200, 0)  # Example position for right image
        #
        ## Draw left image
        #images[int(left_image.split('/')[1][0]) - 1].pos = left_pos
        #images[int(left_image.split('/')[1][0]) - 1].draw()
        #
        ## Draw right image
        #images[int(right_image.split('/')[1][0]) - 1].pos = right_pos
        #images[int(right_image.split('/')[1][0]) - 1].draw()
        #
        ## Flip the window to display images
        #win.flip()
        #
        ## Wait for a key press (you can replace this with your trial timing)
        #event.waitKeys()
        #
        ## Clear the screen for the next trial
        #win.flip()
        #
        ## Increment trial index
        current_trial += 1
        #
        #
        #
        #
        #
        ## Main loop
        #for trial in range(len(image_stims)):
        #    image_stims[trial].draw()  # Draw the image
      End Experiment:
        ## End Experiment
        ##
        ##win.close()
        ##core.quit()
        #
        #win.flip()
        #
    ImageComponent left_image
      image [set every repeat] = $leftimage
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.0
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    ImageComponent right_image
      image [set every repeat] = $rightimage
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np


        pos_k =(0,0)

        l_type = expInfo['learning type']

        #no_response = False

        # Initialize an empty array (list)
        total_reward = 0


        #left_learning_reward_text = ''
      Begin Routine:
        sample_A1 = -1
        sample_B = -1
        sample_A2 = -1
        sample_C = -1

        # to check the sample be in range mean+-3sd
        while sample_A1 < 0 or sample_A1 > 100:
            sample_A1 = np.random.normal(64, 13, 1)[0]  # mean, std_dev, num_samples
            reward_A1 = int(round(sample_A1))

        while sample_B < 0 or sample_A1 > 100:
            sample_B = np.random.normal(54, 13, 1)[0]  # mean, std_dev, num_samples
            reward_B = int(round(sample_B))

        while sample_A2 < 0 or sample_A1 > 100:
            sample_A2 = np.random.normal(64, 13, 1)[0]  # mean, std_dev, num_samples
            reward_A2 = int(round(sample_A2))

        while sample_C < 0 or sample_A1 > 100:
            sample_C = np.random.normal(44, 13, 1)[0]  # mean, std_dev, num_samples
            reward_C = int(round(sample_C))


        #
        #
        ## Hide the text component initially
        #text_no_resp.setAutoDraw(False)
        #
        ## Record the start time of the routine
        #routineStartTime = t
        #
        ## Example boolean condition (replace this with your actual condition)
        #no_response = False  # Initialize with your condition value


        no_response = False

        routineStartTime = t
      Each Frame:
        if trials[current_trial-1][0] == "1.jpg":
        #    left_learning_reward.text = "1"
        #    right_learning_reward.text = "2"

            # A1 - left
            # store this reward in the PsychoPy data file or use it in your experiment
            thisExp.addData('reward_A1', reward_A1)  # Save it to the data file
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A1}'
                    right_learning_reward.text = f'Reward: {reward_B}'
                    thisExp.addData('gain_reward', reward_A1)  # Save it to the data file
        #            total_reward = total_reward + reward_A1
                elif key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A1}'
                    right_learning_reward.text = f'Reward: {reward_B}'

            elif l_type=='2':
                com_par_time=0.5
                if key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A1}'
                    thisExp.addData('gain_reward', reward_A1)  # Save it to the data file
        #            total_reward = total_reward + reward_A1
                elif key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = ''

            # B - right
            # store this reward in the PsychoPy data file or use it in your experiment
            thisExp.addData('reward_B', reward_B)  # Save it to the data file
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A1}'
                    right_learning_reward.text = f'Reward: {reward_B}'
                    thisExp.addData('gain_reward', reward_B)  # Save it to the data file
        #            total_reward = total_reward + reward_B
                elif key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A1}'
                    right_learning_reward.text = f'Reward: {reward_B}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    right_learning_reward.text = f'Reward: {reward_B}'
                    thisExp.addData('gain_reward', reward_B)  # Save it to the data file
        #            total_reward = total_reward + reward_B
                elif key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    right_learning_reward.text = ''

        elif trials[current_trial-1][0] == "2.jpg":
        #    left_learning_reward.text = "2"
        #    right_learning_reward.text = "1"

            # B - left
            # store this reward in the PsychoPy data file or use it in your experiment
            thisExp.addData('reward_B', reward_B)  # Save it to the data file
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_B}'
                    right_learning_reward.text = f'Reward: {reward_A1}'
                    thisExp.addData('gain_reward', reward_B)  # Save it to the data file
        #            total_reward = total_reward + reward_B
                elif key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_B}'
                    right_learning_reward.text = f'Reward: {reward_A1}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_B}'
                    thisExp.addData('gain_reward', reward_B)  # Save it to the data file
        #            total_reward = total_reward + reward_B
                elif key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = ''

            # A1 - right
            # store this reward in the PsychoPy data file or use it in your experiment
            thisExp.addData('reward_A1', reward_A1)  # Save it to the data file
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_B}'
                    right_learning_reward.text = f'Reward: {reward_A1}'
                    thisExp.addData('gain_reward', reward_A1)  # Save it to the data file
        #            total_reward = total_reward + reward_A1
                elif key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_B}'
                    right_learning_reward.text = f'Reward: {reward_A1}'

            elif l_type=='2':
                com_par_time=0.5
                if key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    right_learning_reward.text = f'Reward: {reward_A1}'
                    thisExp.addData('gain_reward', reward_A1)  # Save it to the data file
        #            total_reward = total_reward + reward_A1
                elif key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    right_learning_reward.text = ''

        elif trials[current_trial-1][0] == "3.jpg":
        #    left_learning_reward.text = "3"
        #    right_learning_reward.text = "4"

            # A2 - left
            # store this reward in the PsychoPy data file or use it in your experiment
            thisExp.addData('reward_A2', reward_A2)  # Save it to the data file
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A2}'
                    right_learning_reward.text = f'Reward: {reward_C}'
                    thisExp.addData('gain_reward', reward_A2)  # Save it to the data file
        #            total_reward = total_reward + reward_A2
                elif key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A2}'
                    right_learning_reward.text = f'Reward: {reward_C}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A2}'
                    thisExp.addData('gain_reward', reward_A2)  # Save it to the data file
        #            total_reward = total_reward + reward_A2
                elif key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = ''

            # C - right
            # store this reward in the PsychoPy data file or use it in your experiment
            thisExp.addData('reward_C', reward_C)  # Save it to the data file
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A2}'
                    right_learning_reward.text = f'Reward: {reward_C}'
                    thisExp.addData('gain_reward', reward_C)  # Save it to the data file
        #            total_reward = total_reward + reward_C
                elif key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_A2}'
                    right_learning_reward.text = f'Reward: {reward_C}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    right_learning_reward.text = f'Reward: {reward_C}'
                    thisExp.addData('gain_reward', reward_C)  # Save it to the data file
        #            total_reward = total_reward + reward_C
                elif key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    right_learning_reward.text = ''

        elif trials[current_trial-1][0] == "4.jpg":
        #    left_learning_reward.text = "4"
        #    right_learning_reward.text = "3"

            # C - left
            # store this reward in the PsychoPy data file or use it in your experiment
            thisExp.addData('reward_C', reward_C)  # Save it to the data file
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_C}'
                    right_learning_reward.text = f'Reward: {reward_A2}'
                    thisExp.addData('gain_reward', reward_C)  # Save it to the data file
        #            total_reward = total_reward + reward_C
                elif key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_C}'
                    right_learning_reward.text = f'Reward: {reward_A2}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_C}'
                    thisExp.addData('gain_reward', reward_C)  # Save it to the data file
        #            total_reward = total_reward + reward_C
                elif key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = ''

            # A2 - right
            # store this reward in the PsychoPy data file or use it in your experiment
            thisExp.addData('reward_A2', reward_A2)  # Save it to the data file
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_C}'
                    right_learning_reward.text = f'Reward: {reward_A2}'
                    thisExp.addData('gain_reward', reward_A2)  # Save it to the data file
        #            total_reward = total_reward + reward_A2
                elif key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward.text = f'Reward: {reward_C}'
                    right_learning_reward.text = f'Reward: {reward_A2}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp.keys == 'right':
                    # Update the text component with the generated reward
                    right_learning_reward.text = f'Reward: {reward_A2}'
                    thisExp.addData('gain_reward', reward_A2)  # Save it to the data file
        #            total_reward = total_reward + reward_A2
                elif key_resp.keys == 'left':
                    # Update the text component with the generated reward
                    right_learning_reward.text = ''

        # Check if a key has been pressed
        if key_resp.keys == 'left':
            pos_k=[-0.5,0]
            if t >= routineStartTime + 5.0:
                continueRoutine = False
        #    no_response = False
        elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
            pos_k=[0.5,0]
            if t >= routineStartTime + 5.0:
                continueRoutine = False
        #    no_response = False
        else:  # If any key other than 'right' is pressed
            pos_k=[1.5,0]
            if t >= routineStartTime + 5.0 and t <= routineStartTime + 6.0:
                no_response = True
        #    no_response = True



        #
        #
        ## Check if 5 seconds have passed
        #if t >= routineStartTime + 5.0 and t <= routineStartTime + 6.0:
        #    # Check the boolean condition
        #    if no_response:
        #        text_no_resp.setAutoDraw(True)  # Show the text component
        #    else:
        #        text_no_resp.setAutoDraw(False)  # Hide the text component
        #else:
        #    # Ensure the text component is hidden before 5 seconds
        #    text_no_resp.setAutoDraw(False)
        #
      End Routine:
        if trials[current_trial-1][0] == "1.jpg":
            if key_resp.keys == 'left':
                total_reward = total_reward + reward_A1
            elif key_resp.keys == 'right':
                total_reward = total_reward + reward_B
        if trials[current_trial-1][0] == "2.jpg":
            if key_resp.keys == 'left':
                total_reward = total_reward + reward_B
            elif key_resp.keys == 'right':
                total_reward = total_reward + reward_A1
        if trials[current_trial-1][0] == "3.jpg":
            if key_resp.keys == 'left':
                total_reward = total_reward + reward_A2
            elif key_resp.keys == 'right':
                total_reward = total_reward + reward_C
        if trials[current_trial-1][0] == "4.jpg":
            if key_resp.keys == 'left':
                total_reward = total_reward + reward_C
            elif key_resp.keys == 'right':
                total_reward = total_reward + reward_A2
    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.5765, 0.0039, 1.0000
      lineWidth = 20
      opacity = 0.3
      pos [set every frame] = $pos_k
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 4
      stopVal [duration (s)] = $com_par_time
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    TextboxComponent left_learning_reward
      bold = False
      color = -0.5765, 0.0039, 1.0000
      editable = False
      letterHeight = 0.05
      pos = (-0.5, -0.3)
      size = (0.6, 0.6)
      startVal [time (s)] = 4
      stopVal [duration (s)] = $com_par_time
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    TextboxComponent right_learning_reward
      bold = False
      color = -0.5765, 0.0039, 1.0000
      editable = False
      letterHeight = 0.05
      pos = (0.5, -0.3)
      size = (0.6, 0.6)
      startVal [time (s)] = 4
      stopVal [duration (s)] = $com_par_time
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    TextComponent text_no_resp
      color = -1.0000, -1.0000, -1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [condition] = $no_response
      stopVal [duration (s)] = 1.0
      text [set every frame] = پاسخی دریافت نشد.
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  Routine text_2
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    TextComponent text2
      color = -1.0000, -1.0000, -1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        هر بار از میان دو گزینه‌ی نمایش داده شده،
        با فشردن یکی از کلیدهای راست و چپ روی کیبورد،
         گزینه‌ی با بیشترین پاداش را انتخاب کنید.

        توجه:
        در این بخش ممکن است جفت عددهایی را مقایسه کنید
        که در بخش قبل مقایسه نکرده بودید.

        پس از انتخاب یکی از دو گزینه‌ی نمایش داده شده
        باید میزان اطمینان خود از انتخابتان را با استفاده از موس
        مشخص کنید.

        (هرگاه آماده بودید، کلید space را فشار دهید.)
    KeyboardComponent text2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_transfer
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    PolygonComponent fixation2
      fillColor = black
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.08
      shape = cross
      size = (0.03, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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  Routine main_transfer
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    CodeComponent transfer_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment

        import random

        # Create a list of image pairs
        image_pairs_2 = [
            ("1.jpg", "2.jpg"),
            ("1.jpg", "3.jpg"),
            ("1.jpg", "4.jpg"),
            ("2.jpg", "3.jpg"),
            ("2.jpg", "4.jpg"),
            ("3.jpg", "4.jpg")
        ]

        # Create a list of trials with each pair in both possible positions
        trials_2 = []
        for pair in image_pairs_2:
            trials_2.append(pair)        # Original order
            #trials.append(pair[::-1])  # Reversed order

        # Multiply trials to ensure enough repetitions and shuffle
        trials_2 *= 4  # Adjust the number of repetitions as needed
        random.shuffle(trials_2)
        #
        ### Initialize PsychoPy window
        ##win = visual.Window(size=(800, 600), units='pix', fullscr=False)
        #win = visual.Window(size=(800, 600), monitor="testMonitor")

        # Initialize current_trial
        current_trial_2 = 0

        #
        #image_filenames = ["1.jpg", "2.jpg", "3.jpg", "4.jpg"]  # Add all your filenames here
        #
        ## Create an empty list to store ImageStim objects
        #image_stims = []
        #
        ## Create ImageStim objects for each filename
        #for filename in image_filenames:
        #    image_stim = visual.ImageStim(win, image=filename, pos=(0, 0))  # Adjust position if needed
        #    image_stims.append(image_stim)
        #
        #
      Begin Routine:
        ## Begin Routine
        #
        ## Get the current trial
        leftimage = trials_2[current_trial_2][0]
        rightimage = trials_2[current_trial_2][1]
        #
        ## Define positions
        #left_pos = (-200, 0)  # Example position for left image
        #right_pos = (200, 0)  # Example position for right image
        #
        ## Draw left image
        #images[int(left_image.split('/')[1][0]) - 1].pos = left_pos
        #images[int(left_image.split('/')[1][0]) - 1].draw()
        #
        ## Draw right image
        #images[int(right_image.split('/')[1][0]) - 1].pos = right_pos
        #images[int(right_image.split('/')[1][0]) - 1].draw()
        #
        ## Flip the window to display images
        #win.flip()
        #
        ## Wait for a key press (you can replace this with your trial timing)
        #event.waitKeys()
        #
        ## Clear the screen for the next trial
        #win.flip()
        #
        ## Increment trial index
        current_trial_2 += 1
        #
        #
        #
        #
        #
        ## Main loop
        #for trial in range(len(image_stims)):
        #    image_stims[trial].draw()  # Draw the image
      End Experiment:
        ## End Experiment
        ##
        ##win.close()
        ##core.quit()
        #
        #win.flip()
        #
    ImageComponent left_image_2
      image [set every repeat] = $leftimage
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [condition] = $end_time_more
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    ImageComponent right_image_2
      image [set every repeat] = $rightimage
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [condition] = $end_time_more
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    KeyboardComponent key_resp_2
      allowedKeys = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [time (s)] = $end_time
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np


        pos_k_2 =(0,0)
      Begin Routine:
        start_time = t
        end_time = 1000
        end_time_more = False
      Each Frame:
        # Check if a key has been pressed
        if key_resp_2.keys == 'left':
            pos_k_2=[-0.5,0]
            end_time = t
            core.wait(1.0)
            end_time_more = True
        elif key_resp_2.keys == 'right':
            pos_k_2=[0.5,0]
            end_time = t
            core.wait(1.0)
            end_time_more = True
        else:  # If any key other than 'right' is pressed
            pos_k_2=[1.5,0]
    PolygonComponent polygon_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.5765, 0.0039, 1.0000
      lineWidth = 20
      opacity = 0.3
      pos [set every frame] = $pos_k_2
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = $end_time
      stopVal [duration (s)] = 1
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  Routine slider_transfer
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    SliderComponent slider_trns
      borderColor = Black
      forceEndRoutine = True
      granularity = 5
      initVal = 50
      labels = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = slider
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    MouseComponent mouse_trns
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Make sure the mouse cursor is visible
        win.mouseVisible = True
  Routine text_3
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    TextComponent text3
      color = -1.0000, -1.0000, -1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        برای هر تصویر نمایش داده شده
        میزان برآورد خود از پاداش مربوط به آن را
        با استفاده از موس مشخص کنید.

        (هرگاه آماده بودید، کلید space را فشار دهید.)
    KeyboardComponent text3_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_estimation
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    PolygonComponent fixation3
      fillColor = black
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.08
      shape = cross
      size = (0.03, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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  Routine main_estimation
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    CodeComponent estimation_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment

        import random

        # Create a list of image pairs
        images3 = [
            "1.jpg",
            "2.jpg",
            "3.jpg",
            "4.jpg"
        ]

        # Create a list of trials with each pair in both possible positions
        trials_3 = []
        for image in images3:
            trials_3.append(image)        # Original order
            #trials.append(pair[::-1])  # Reversed order

        # Multiply trials to ensure enough repetitions and shuffle
        trials_3 *= 4  # Adjust the number of repetitions as needed
        random.shuffle(trials_3)
        #
        ### Initialize PsychoPy window
        ##win = visual.Window(size=(800, 600), units='pix', fullscr=False)
        #win = visual.Window(size=(800, 600), monitor="testMonitor")

        # Initialize current_trial
        current_trial_3 = 0

        #
        #image_filenames = ["1.jpg", "2.jpg", "3.jpg", "4.jpg"]  # Add all your filenames here
        #
        ## Create an empty list to store ImageStim objects
        #image_stims = []
        #
        ## Create ImageStim objects for each filename
        #for filename in image_filenames:
        #    image_stim = visual.ImageStim(win, image=filename, pos=(0, 0))  # Adjust position if needed
        #    image_stims.append(image_stim)
        #
        #
      Begin Routine:
        ## Begin Routine
        #
        ## Get the current trial
        image = trials_3[current_trial_3]
        #
        ## Define positions
        #left_pos = (-200, 0)  # Example position for left image
        #right_pos = (200, 0)  # Example position for right image
        #
        ## Draw left image
        #images[int(left_image.split('/')[1][0]) - 1].pos = left_pos
        #images[int(left_image.split('/')[1][0]) - 1].draw()
        #
        ## Draw right image
        #images[int(right_image.split('/')[1][0]) - 1].pos = right_pos
        #images[int(right_image.split('/')[1][0]) - 1].draw()
        #
        ## Flip the window to display images
        #win.flip()
        #
        ## Wait for a key press (you can replace this with your trial timing)
        #event.waitKeys()
        #
        ## Clear the screen for the next trial
        #win.flip()
        #
        ## Increment trial index
        current_trial_3 += 1
        #
        #
        #
        #
        #
        ## Main loop
        #for trial in range(len(image_stims)):
        #    image_stims[trial].draw()  # Draw the image
      End Experiment:
        ## End Experiment
        ##
        ##win.close()
        ##core.quit()
        #
        #win.flip()
        #
    ImageComponent image_3
      image [set every repeat] = $image
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    SliderComponent slider_estm
      borderColor = Black
      forceEndRoutine = True
      granularity = 5
      initVal = 50
      labels = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = slider
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    MouseComponent mouse_estm
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Make sure the mouse cursor is visible
        win.mouseVisible = True


        #
        ## Check if the mouse is pressed within the slider region
        #if mouse_estm.isPressedIn(slider_estm):
        #    continueRoutine = False  # End the routine if the slider is clicked
        #
  Routine show_reward
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    TextComponent text4
      color = -1.0000, -1.0000, -1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        مجموع پاداش‌ (با توجه به گزینه‌های فاز یادگیری):
    TextComponent totalRewardText
      color = -1.0000, -1.0000, -1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Total reward: {total_reward}"
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    KeyboardComponent text4_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_training
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  Routine text_0
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    TextComponent text0
      color = -1.0000, -1.0000, -1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        هر بار از میان دو گزینه‌ی نمایش داده شده،
        با فشردن یکی از کلیدهای راست و چپ روی کیبورد،
         گزینه‌ی با بیشترین پاداش را انتخاب کنید.

        (هرگاه آماده بودید، کلید space را فشار دهید.)
    KeyboardComponent text0_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_training
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    CodeComponent training_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment

        import random

        # Create a list of image pairs
        image_pairs0 = [
            ("1-1.jpg", "1-2.jpg"),
            ("1-3.jpg", "1-4.jpg"),
            ("1-2.jpg", "1-1.jpg"),
            ("1-4.jpg", "1-3.jpg")
        ]

        # Create a list of trials with each pair in both possible positions
        trials0 = []
        for pair in image_pairs0:
            trials0.append(pair)        # Original order
            #trials.append(pair[::-1])  # Reversed order

        # Multiply trials to ensure enough repetitions and shuffle
        trials0 *= 5  # Adjust the number of repetitions as needed
        random.shuffle(trials0)
        #
        ### Initialize PsychoPy window
        ##win = visual.Window(size=(800, 600), units='pix', fullscr=False)
        #win = visual.Window(size=(800, 600), monitor="testMonitor")

        # Initialize current_trial
        current_trial0 = 0

        #
        #image_filenames = ["1.jpg", "2.jpg", "3.jpg", "4.jpg"]  # Add all your filenames here
        #
        ## Create an empty list to store ImageStim objects
        #image_stims = []
        #
        ## Create ImageStim objects for each filename
        #for filename in image_filenames:
        #    image_stim = visual.ImageStim(win, image=filename, pos=(0, 0))  # Adjust position if needed
        #    image_stims.append(image_stim)
        #
        #
      Begin Routine:
        ## Begin Routine
        #
        ## Get the current trial
        leftimage_0 = trials0[current_trial0][0]
        rightimage_0 = trials0[current_trial0][1]
        #
        ## Define positions
        #left_pos = (-200, 0)  # Example position for left image
        #right_pos = (200, 0)  # Example position for right image
        #
        ## Draw left image
        #images[int(left_image.split('/')[1][0]) - 1].pos = left_pos
        #images[int(left_image.split('/')[1][0]) - 1].draw()
        #
        ## Draw right image
        #images[int(right_image.split('/')[1][0]) - 1].pos = right_pos
        #images[int(right_image.split('/')[1][0]) - 1].draw()
        #
        ## Flip the window to display images
        #win.flip()
        #
        ## Wait for a key press (you can replace this with your trial timing)
        #event.waitKeys()
        #
        ## Clear the screen for the next trial
        #win.flip()
        #
        ## Increment trial index
        current_trial0 += 1
        #
        #
        #
        #
        #
        ## Main loop
        #for trial in range(len(image_stims)):
        #    image_stims[trial].draw()  # Draw the image
      End Experiment:
        ## End Experiment
        ##
        ##win.close()
        ##core.quit()
        #
        #win.flip()
        #
    ImageComponent left_image_0
      image [set every repeat] = $leftimage_0
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.0
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    ImageComponent right_image_0
      image [set every repeat] = $rightimage_0
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_0
      allowedKeys = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
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    CodeComponent code_0
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np


        pos_k0 =(0,0)

        l_type = expInfo['learning type']

        #no_response = False
      Begin Routine:
        sample_A1 = -1
        sample_B = -1
        sample_A2 = -1
        sample_C = -1

        # to check the sample be in range mean+-3sd
        while sample_A1 < 0 or sample_A1 > 100:
            sample_A1 = np.random.normal(64, 13, 1)[0]  # mean, std_dev, num_samples
            reward_A1 = int(round(sample_A1))

        while sample_B < 0 or sample_A1 > 100:
            sample_B = np.random.normal(54, 13, 1)[0]  # mean, std_dev, num_samples
            reward_B = int(round(sample_B))

        while sample_A2 < 0 or sample_A1 > 100:
            sample_A2 = np.random.normal(64, 13, 1)[0]  # mean, std_dev, num_samples
            reward_A2 = int(round(sample_A2))

        while sample_C < 0 or sample_A1 > 100:
            sample_C = np.random.normal(44, 13, 1)[0]  # mean, std_dev, num_samples
            reward_C = int(round(sample_C))


        #
        #
        ## Hide the text component initially
        #text_no_resp.setAutoDraw(False)
        #
        ## Record the start time of the routine
        #routineStartTime = t
        #
        ## Example boolean condition (replace this with your actual condition)
        #no_response = False  # Initialize with your condition value


        no_response = False

        routineStartTime = t
      Each Frame:
        if trials0[current_trial0-1][0] == "1-1.jpg":
        #    left_learning_reward.text = "1"
        #    right_learning_reward.text = "2"

            # A1 - left
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp_0.keys == 'left' or key_resp_0.keys == 'right':
                    left_learning_reward_0.text = f'Reward: {reward_A1}'
                    right_learning_reward_0.text = f'Reward: {reward_B}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp_0.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward_0.text = f'Reward: {reward_A1}'
                elif key_resp_0.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward_0.text = ''

            # B - right
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp_0.keys == 'left' or key_resp_0.keys == 'right':
                    left_learning_reward_0.text = f'Reward: {reward_A1}'
                    right_learning_reward_0.text = f'Reward: {reward_B}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp_0.keys == 'right':
                    # Update the text component with the generated reward
                    right_learning_reward_0.text = f'Reward: {reward_B}'
                elif key_resp_0.keys == 'left':
                    # Update the text component with the generated reward
                    right_learning_reward_0.text = ''

        elif trials0[current_trial0-1][0] == "1-2.jpg":
        #    left_learning_reward.text = "2"
        #    right_learning_reward.text = "1"

            # B - left
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp_0.keys == 'left' or key_resp_0.keys == 'right':
                    left_learning_reward_0.text = f'Reward: {reward_B}'
                    right_learning_reward_0.text = f'Reward: {reward_A1}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp_0.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward_0.text = f'Reward: {reward_B}'
                elif key_resp_0.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward_0.text = ''

            # A1 - right
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp_0.keys == 'left' or key_resp_0.keys == 'right':
                    left_learning_reward_0.text = f'Reward: {reward_B}'
                    right_learning_reward_0.text = f'Reward: {reward_A1}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp_0.keys == 'right':
                    # Update the text component with the generated reward
                    right_learning_reward_0.text = f'Reward: {reward_A1}'
                elif key_resp_0.keys == 'left':
                    # Update the text component with the generated reward
                    right_learning_reward_0.text = ''

        elif trials0[current_trial0-1][0] == "1-3.jpg":
        #    left_learning_reward.text = "3"
        #    right_learning_reward.text = "4"

            # A2 - left
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp_0.keys == 'left' or key_resp_0.keys == 'right':
                    left_learning_reward_0.text = f'Reward: {reward_A2}'
                    right_learning_reward_0.text = f'Reward: {reward_C}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp_0.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward_0.text = f'Reward: {reward_A2}'
                elif key_resp_0.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward_0.text = ''

            # C - right
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp_0.keys == 'left' or key_resp_0.keys == 'right':
                    left_learning_reward_0.text = f'Reward: {reward_A2}'
                    right_learning_reward_0.text = f'Reward: {reward_C}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp_0.keys == 'right':
                    # Update the text component with the generated reward
                    right_learning_reward_0.text = f'Reward: {reward_C}'
                elif key_resp_0.keys == 'left':
                    # Update the text component with the generated reward
                    right_learning_reward_0.text = ''

        elif trials0[current_trial0-1][0] == "1-4.jpg":
        #    left_learning_reward.text = "4"
        #    right_learning_reward.text = "3"

            # C - left
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp_0.keys == 'left' or key_resp_0.keys == 'right':
                    left_learning_reward_0.text = f'Reward: {reward_C}'
                    right_learning_reward_0.text = f'Reward: {reward_A2}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp_0.keys == 'left':
                    # Update the text component with the generated reward
                    left_learning_reward_0.text = f'Reward: {reward_C}'
                elif key_resp_0.keys == 'right':
                    # Update the text component with the generated reward
                    left_learning_reward_0.text = ''

            # A2 - right
            # check the learning type - complete(1) or partial(2)
            if l_type=='1':
                com_par_time=1
                if key_resp_0.keys == 'left' or key_resp_0.keys == 'right':
                    left_learning_reward_0.text = f'Reward: {reward_C}'
                    right_learning_reward_0.text = f'Reward: {reward_A2}'
            elif l_type=='2':
                com_par_time=0.5
                if key_resp_0.keys == 'right':
                    # Update the text component with the generated reward
                    right_learning_reward_0.text = f'Reward: {reward_A2}'
                elif key_resp_0.keys == 'left':
                    # Update the text component with the generated reward
                    right_learning_reward_0.text = ''

        # Check if a key has been pressed
        if key_resp_0.keys == 'left':
            pos_k0=[-0.5,0]
            if t >= routineStartTime + 5.0:
                continueRoutine = False
        #    no_response = False
        elif key_resp_0.keys == 'right':  # If any key other than 'right' is pressed
            pos_k0=[0.5,0]
            if t >= routineStartTime + 5.0:
                continueRoutine = False
        #    no_response = False
        else:  # If any key other than 'right' is pressed
            pos_k0=[1.5,0]
            if t >= routineStartTime + 5.0 and t <= routineStartTime + 6.0:
                no_response = True
        #    no_response = True



        #
        #
        ## Check if 5 seconds have passed
        #if t >= routineStartTime + 5.0 and t <= routineStartTime + 6.0:
        #    # Check the boolean condition
        #    if no_response:
        #        text_no_resp.setAutoDraw(True)  # Show the text component
        #    else:
        #        text_no_resp.setAutoDraw(False)  # Hide the text component
        #else:
        #    # Ensure the text component is hidden before 5 seconds
        #    text_no_resp.setAutoDraw(False)
        #
      End Routine:
        #if no_response == False:
        #    continueRoutine=False
    PolygonComponent polygon_0
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.5765, 0.0039, 1.0000
      lineWidth = 20
      opacity = 0.3
      pos [set every frame] = $pos_k0
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 4
      stopVal [duration (s)] = $com_par_time
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    TextboxComponent left_learning_reward_0
      bold = False
      color = -0.5765, 0.0039, 1.0000
      editable = False
      letterHeight = 0.05
      pos = (-0.5, -0.3)
      size = (0.6, 0.6)
      startVal [time (s)] = 4
      stopVal [duration (s)] = $com_par_time
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    TextboxComponent right_learning_reward_0
      bold = False
      color = -0.5765, 0.0039, 1.0000
      editable = False
      letterHeight = 0.05
      pos = (0.5, -0.3)
      size = (0.6, 0.6)
      startVal [time (s)] = 4
      stopVal [duration (s)] = $com_par_time
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    TextComponent text_no_resp_0
      color = -1.0000, -1.0000, -1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [condition] = $no_response
      stopVal [duration (s)] = 1.0
      text [set every frame] = پاسخی دریافت نشد.
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Flow
  Routine text_0
  LoopInitiator training_trials loopType="TrialHandler"
    loopType = random
    nReps = ۵
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    Routine fixation_training
    Routine main_training
  LoopTerminator training_trials
  Routine text_1
  LoopInitiator learning_trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine fixation_learning
    Routine main_learning
  LoopTerminator learning_trials
  Routine text_2
  LoopInitiator transfer_trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine fixation_transfer
    Routine main_transfer
    Routine slider_transfer
  LoopTerminator transfer_trials
  Routine text_3
  LoopInitiator estimation_trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine fixation_estimation
    Routine main_estimation
  LoopTerminator estimation_trials
  Routine show_reward
