PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'seeker observee': '0.7', 'averse observee': '0.3'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = article2
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine text_1
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    TextComponent text1
      color = black
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        در ادامه تعدادی شرط بندی با احتمال برنده شدن در هر یک
        نمایش داده شده است. می‌توانید در آن شرکت کنید یا نکنید.
        در صورتی که در آن شرکت نکنید،
        ۱۰ دلار تضمین شده برنده می‌شوید.

        برای اعلام پذیرش یا عدم پذیرش شرکت در شرط بندی
        از میان دو گزینه‌ی Accept و Reject
        با فشردن کلیدهای چپ و راست، یکی را انتخاب کنید.

        (در صورت آماده بودن، کلید space فشار دهید.)
    KeyboardComponent text1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intertrial
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    PolygonComponent fixation1
      fillColor = black
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0.08
      shape = cross
      size = (0.03, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inter_time
      units = norm
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        # Generate a uniform random number between 2 and 6
        inter_time = random.randint(2, 6)
  Routine self_trial
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('image_name', image_name)
    ImageComponent image1
      image [set every frame] = $image_name
      pos = (0, 0.2)
      size = (1, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        reject = 'Reject'
        accept = 'Accept'

        pos_k =(0,0)
      Begin Routine:
        left_right = random.randint(0, 1)
      Each Frame:
        if left_right == 1:
            textbox_left.text = f'{reject}'
            textbox_right.text = f'{accept}'
        elif left_right == 0:
            textbox_left.text = f'{accept}'
            textbox_right.text = f'{reject}'



        # Check if a key has been pressed
        if key_resp.keys == 'left':
            pos_k=[-0.2,-0.2]
        elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
            pos_k=[0.2,-0.2]
        else:  # If any key other than 'right' is pressed
            pos_k=[1.5,0]
      End Routine:
        if left_right == 1:
            thisExp.addData('textbox_left', 'Reject')
            thisExp.addData('textbox_right', 'Accept')
            if key_resp.keys == 'left':
                thisExp.addData('selection', 'Reject')
            elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
                thisExp.addData('selection', 'Accept')
            else:  # If any key other than 'right' is pressed
                thisExp.addData('selection', '')
        elif left_right == 0:
            thisExp.addData('textbox_left', 'Accept')
            thisExp.addData('textbox_right', 'Reject')
            if key_resp.keys == 'left':
                thisExp.addData('selection', 'Accept')
            elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
                thisExp.addData('selection', 'Reject')
            else:  # If any key other than 'right' is pressed
                thisExp.addData('selection', '')
    TextboxComponent textbox_left
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextboxComponent textbox_right
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
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    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0.3
      pos [set every frame] = $pos_k
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
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  Routine text_2
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    TextComponent text2
      color = black
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        در ادامه تعدادی شرط بندی با احتمال برنده شدن
        و همچنین گزینه‌ی انتخاب شده توسط یک شرکت کننده‌ی
        دیگر نمایش داده شده است.

        به این انتخاب‌ها توجه کنید.

        (در صورت آماده بودن، کلید space فشار دهید.)
    KeyboardComponent text2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine third_click
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    TextComponent text3
      color = black
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = لطفا کلید space فشار دهید.
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    KeyboardComponent text3_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_3
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    TextComponent text4
      color = black
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        در ادامه تعدادی شرط بندی و احتمال برنده شدن در هر یک
        نمایش داده شده است.

        برای پیشبینی پذیرش یا عدم پذیرش شرکت در شرط بندی
        توسط شرکت کننده‌ی دیگر
        از میان دو گزینه‌ی Accept و Reject
        با فشردن کلیدهای چپ و راست، یکی را انتخاب کنید.

        (در صورت آماده بودن، کلید space فشار دهید.)
    KeyboardComponent text4_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine predict_trial
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('image_name_pred', image_name)
    ImageComponent image3
      image [set every frame] = $image_name
      pos = (0, 0.2)
      size = (1, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        reject = 'Reject'
        accept = 'Accept'

        pos_k =(0,0)
      Begin Routine:
        left_right = random.randint(0, 1)
      Each Frame:
        if left_right == 1:
            textbox_left_3.text = f'{reject}'
            textbox_right_3.text = f'{accept}'
        elif left_right == 0:
            textbox_left_3.text = f'{accept}'
            textbox_right_3.text = f'{reject}'



        # Check if a key has been pressed
        if key_resp_2.keys == 'left':
            pos_k=[-0.2,-0.2]
        elif key_resp_2.keys == 'right':  # If any key other than 'right' is pressed
            pos_k=[0.2,-0.2]
        else:  # If any key other than 'right' is pressed
            pos_k=[1.5,0]
      End Routine:
        if left_right == 1:
            thisExp.addData('textbox_left_pred', 'Reject')
            thisExp.addData('textbox_right_pred', 'Accept')
            if key_resp_2.keys == 'left':
                thisExp.addData('selection_pred', 'Reject')
            elif key_resp_2.keys == 'right':  # If any key other than 'right' is pressed
                thisExp.addData('selection_pred', 'Accept')
            else:  # If any key other than 'right' is pressed
                thisExp.addData('selection', '')
        elif left_right == 0:
            thisExp.addData('textbox_left_pred', 'Accept')
            thisExp.addData('textbox_right_pred', 'Reject')
            if key_resp_2.keys == 'left':
                thisExp.addData('selection_pred', 'Accept')
            elif key_resp_2.keys == 'right':  # If any key other than 'right' is pressed
                thisExp.addData('selection_pred', 'Reject')
            else:  # If any key other than 'right' is pressed
                thisExp.addData('selection_pred', '')
    TextboxComponent textbox_left_3
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextboxComponent textbox_right_3
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_2
      allowedKeys = 'right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
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    PolygonComponent polygon_3
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0.3
      pos [set every frame] = $pos_k
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
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  Routine observe_trial_averse
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('image_name_obs', image_name)
    ImageComponent image2
      image [set every frame] = $image_name
      pos = (0, 0.2)
      size = (1, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import math


        reject = 'Reject'
        accept = 'Accept'

        pos_k =(0,0)




        aver = expInfo['averse observee']




        utility =  float(aver) - 0.5

        accept_num = int(14 * float(aver))
        reject_num = 14 - accept_num



        # Create an array with accept_num 1's and reject_num 0's
        accept_reject = np.array([1] * accept_num + [0] * reject_num)
        random.shuffle(accept_reject)


        accept_reject_i = 0
      Begin Routine:
        left_right = random.randint(0, 1)


        #
        #if accept_reject[accept_reject_i] == 1: # accept
        #    if left_right == 1:
        ##        textbox_left.text = f'{reject}'
        ##        textbox_right.text = f'{accept}'
        #        pos_k=[0.2,-0.2]
        #    elif left_right == 0:
        ##        textbox_left.text = f'{accept}'
        ##        textbox_right.text = f'{reject}'
        #        pos_k=[-0.2,-0.2]
        #if accept_reject[accept_reject_i] == 0: # reject
        #        pos_k=[1.5,0]
        #
        #
        #
        #accept_reject_i += 1
      Each Frame:
        if left_right == 1:
            textbox_left_2.text = f'{reject}'
            textbox_right_2.text = f'{accept}'
        elif left_right == 0:
            textbox_left_2.text = f'{accept}'
            textbox_right_2.text = f'{reject}'


        #
        ## Check if a key has been pressed
        #if key_resp.keys == 'left':
        #    pos_k=[-0.2,-0.2]
        #elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
        #    pos_k=[0.2,-0.2]
        #else:  # If any key other than 'right' is pressed
        #    pos_k=[1.5,0]

        if accept_reject[accept_reject_i] == 1: # accept
            if left_right == 1:
        #        textbox_left.text = f'{reject}'
        #        textbox_right.text = f'{accept}'
                pos_k=[0.2,-0.2]
            elif left_right == 0:
        #        textbox_left.text = f'{accept}'
        #        textbox_right.text = f'{reject}'
                pos_k=[-0.2,-0.2]
        if accept_reject[accept_reject_i] == 0: # reject
            if left_right == 1:
        #        textbox_left.text = f'{reject}'
        #        textbox_right.text = f'{accept}'
                pos_k=[-0.2,-0.2]
            elif left_right == 0:
        #        textbox_left.text = f'{accept}'
        #        textbox_right.text = f'{reject}'
                pos_k=[0.2,-0.2]
      End Routine:
        accept_reject_i += 1


        if left_right == 1:
            thisExp.addData('textbox_left_obs', 'Reject')
            thisExp.addData('textbox_right_obs', 'Accept')
        #    if key_resp.keys == 'left':
        #        thisExp.addData('selection', 'Reject')
        #    elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
        #        thisExp.addData('selection', 'Accept')
        #    else:  # If any key other than 'right' is pressed
        #        thisExp.addData('selection', '')
            if accept_reject[accept_reject_i - 1] == 1:  # accept
                thisExp.addData('selection_obs', 'Reject')
            elif accept_reject[accept_reject_i - 1] == 0: # reject
                thisExp.addData('selection_obs', 'Accept')
        elif left_right == 0:
            thisExp.addData('textbox_left_obs', 'Accept')
            thisExp.addData('textbox_right_obs', 'Reject')
        #    if key_resp.keys == 'left':
        #        thisExp.addData('selection', 'Accept')
        #    elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
        #        thisExp.addData('selection', 'Reject')
        #    else:  # If any key other than 'right' is pressed
        #        thisExp.addData('selection', '')
            if accept_reject[accept_reject_i - 1] == 1:  # accept
                thisExp.addData('selection_obs', 'Reject')
            elif accept_reject[accept_reject_i - 1] == 0: # reject
                thisExp.addData('selection_obs', 'Accept')
    TextboxComponent textbox_left_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextboxComponent textbox_right_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0.3
      pos [set every frame] = $pos_k
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
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  Routine observe_trial_seek
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('image_name_obs_2', image_name)
    ImageComponent image4
      image [set every frame] = $image_name
      pos = (0, 0.2)
      size = (1, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import math


        reject = 'Reject'
        accept = 'Accept'

        pos_k =(0,0)




        seek = expInfo['seeker observee']

        utility_2 =  float(seek) - 0.5
        accept_num_2 = int(14 * float(seek))
        reject_num_2 = 14 - accept_num_2


        # Create an array with accept_num 1's and reject_num 0's
        accept_reject_2 = np.array([1] * accept_num_2 + [0] * reject_num_2)
        random.shuffle(accept_reject_2)


        accept_reject_i_2 = 0
      Begin Routine:
        left_right = random.randint(0, 1)


        #
        #if accept_reject[accept_reject_i] == 1: # accept
        #    if left_right == 1:
        ##        textbox_left.text = f'{reject}'
        ##        textbox_right.text = f'{accept}'
        #        pos_k=[0.2,-0.2]
        #    elif left_right == 0:
        ##        textbox_left.text = f'{accept}'
        ##        textbox_right.text = f'{reject}'
        #        pos_k=[-0.2,-0.2]
        #if accept_reject[accept_reject_i] == 0: # reject
        #        pos_k=[1.5,0]
        #
        #
        #
        #accept_reject_i += 1
      Each Frame:
        if left_right == 1:
            textbox_left_4.text = f'{reject}'
            textbox_right_4.text = f'{accept}'
        elif left_right == 0:
            textbox_left_4.text = f'{accept}'
            textbox_right_4.text = f'{reject}'


        #
        ## Check if a key has been pressed
        #if key_resp.keys == 'left':
        #    pos_k=[-0.2,-0.2]
        #elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
        #    pos_k=[0.2,-0.2]
        #else:  # If any key other than 'right' is pressed
        #    pos_k=[1.5,0]

        if accept_reject_2[accept_reject_i_2] == 1: # accept
            if left_right == 1:
        #        textbox_left.text = f'{reject}'
        #        textbox_right.text = f'{accept}'
                pos_k=[0.2,-0.2]
            elif left_right == 0:
        #        textbox_left.text = f'{accept}'
        #        textbox_right.text = f'{reject}'
                pos_k=[-0.2,-0.2]
        if accept_reject_2[accept_reject_i_2] == 0: # reject
            if left_right == 1:
        #        textbox_left.text = f'{reject}'
        #        textbox_right.text = f'{accept}'
                pos_k=[-0.2,-0.2]
            elif left_right == 0:
        #        textbox_left.text = f'{accept}'
        #        textbox_right.text = f'{reject}'
                pos_k=[0.2,-0.2]
      End Routine:
        accept_reject_i_2 += 1


        if left_right == 1:
            thisExp.addData('textbox_left_obs_2', 'Reject')
            thisExp.addData('textbox_right_obs_2', 'Accept')
        #    if key_resp.keys == 'left':
        #        thisExp.addData('selection', 'Reject')
        #    elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
        #        thisExp.addData('selection', 'Accept')
        #    else:  # If any key other than 'right' is pressed
        #        thisExp.addData('selection', '')
            if accept_reject_2[accept_reject_i_2 - 1] == 1:  # accept
                thisExp.addData('selection_obs_2', 'Reject')
            elif accept_reject_2[accept_reject_i_2 - 1] == 0: # reject
                thisExp.addData('selection_obs_2', 'Accept')
        elif left_right == 0:
            thisExp.addData('textbox_left_obs_2', 'Accept')
            thisExp.addData('textbox_right_obs_2', 'Reject')
        #    if key_resp.keys == 'left':
        #        thisExp.addData('selection', 'Accept')
        #    elif key_resp.keys == 'right':  # If any key other than 'right' is pressed
        #        thisExp.addData('selection', 'Reject')
        #    else:  # If any key other than 'right' is pressed
        #        thisExp.addData('selection', '')
            if accept_reject_2[accept_reject_i_2 - 1] == 1:  # accept
                thisExp.addData('selection_obs_2', 'Reject')
            elif accept_reject_2[accept_reject_i_2 - 1] == 0: # reject
                thisExp.addData('selection_obs_2', 'Accept')
    TextboxComponent textbox_left_4
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextboxComponent textbox_right_4
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.2, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_4
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 20
      opacity = 0.3
      pos [set every frame] = $pos_k
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
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Flow
  Routine text_1
  LoopInitiator selt_trials loopType="TrialHandler"
    conditionsFile = award-probability.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'dollar': 35, 'probability': 0.3, 'image_name': '1.png'},
      {'dollar': 12, 'probability': 0.4, 'image_name': '2.png'},
      {'dollar': 27, 'probability': 0.5, 'image_name': '3.png'},
      {'dollar': 20, 'probability': 0.61, 'image_name': '4.png'},
      {'dollar': 50, 'probability': 0.57, 'image_name': '5.png'},
      {'dollar': 32, 'probability': 0.5, 'image_name': '6.png'},
      {'dollar': 27, 'probability': 0.7, 'image_name': '7.png'},
      {'dollar': 18, 'probability': 0.89, 'image_name': '8.png'},
      {'dollar': 41, 'probability': 0.5, 'image_name': '9.png'},
      {'dollar': 33, 'probability': 0.4, 'image_name': '10.png'},
      {'dollar': 29, 'probability': 0.41, 'image_name': '11.png'},
      {'dollar': 36, 'probability': 0.77, 'image_name': '12.png'},
      {'dollar': 45, 'probability': 0.6, 'image_name': '13.png'},
      {'dollar': 47, 'probability': 0.7, 'image_name': '14.png'},
      {'dollar': 21, 'probability': 0.75, 'image_name': '15.png'},
      {'dollar': 12, 'probability': 0.9, 'image_name': '16.png'},
      {'dollar': 12, 'probability': 0.8, 'image_name': '17.png'},
      {'dollar': 26, 'probability': 0.95, 'image_name': '18.png'},
      {'dollar': 28, 'probability': 0.7, 'image_name': '19.png'},
      {'dollar': 17, 'probability': 0.26, 'image_name': '20.png'},
      {'dollar': 47, 'probability': 0.57, 'image_name': '21.png'},
      {'dollar': 30, 'probability': 0.5, 'image_name': '22.png'},
      {'dollar': 50, 'probability': 0.89, 'image_name': '23.png'},
      {'dollar': 49, 'probability': 0.6, 'image_name': '24.png'},
      {'dollar': 26, 'probability': 0.3, 'image_name': '25.png'}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
    Routine intertrial
    Routine self_trial
  LoopTerminator selt_trials
  Routine text_3
  LoopInitiator predict_trials_1 loopType="TrialHandler"
    Selected rows = 1:7
    conditionsFile = award-probability.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine intertrial
    Routine predict_trial
  LoopTerminator predict_trials_1
  Routine text_2
  LoopInitiator observe_trials_averse loopType="TrialHandler"
    Selected rows = 1:15
    conditionsFile = award-probability.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine intertrial
    Routine observe_trial_averse
    Routine third_click
  LoopTerminator observe_trials_averse
  Routine text_1
  LoopInitiator self_trials_2 loopType="TrialHandler"
    conditionsFile = award-probability.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine intertrial
    Routine self_trial
  LoopTerminator self_trials_2
  Routine text_3
  LoopInitiator predict_trials loopType="TrialHandler"
    Selected rows = 1:7
    conditionsFile = award-probability.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine intertrial
    Routine predict_trial
  LoopTerminator predict_trials
  Routine text_2
  LoopInitiator observe_trials_seek loopType="TrialHandler"
    Selected rows = 1:15
    conditionsFile = award-probability.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine intertrial
    Routine observe_trial_seek
    Routine third_click
  LoopTerminator observe_trials_seek
